CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ROI2")
    Name to assign these images:ROI2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:ROI2
    Name the primary objects to be identified:ROI2objects
    Typical diameter of objects, in pixel units (Min,Max):6,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:ROI2objects
    Name the output objects:ROI2Expanded
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
EditObjectsManually:[module_num:7|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
    Select the objects to be edited:ROI2Expanded
    Name the edited objects:ROI2Edited
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:ROI2
    Allow overlapping objects?:No

MaskObjects:[module_num:8|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
    Select objects to be masked:ROI2Edited
    Name the masked objects:ROI2masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ROI2Edited
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:ROI2masked
    Name the output image:ROI2image
    Select the color format:uint16
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:ROI2image
    Select method for constructing file names:From image filename
    Select image name for file prefix:ROI2
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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